PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay_discounting_task
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $" GBP " + str(reward_today) + " today " + " or " + " GBP " + str(future_reward)+ " after " + str(delay)+ " days "
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Inst
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You would be shown two lotteries.
        You need to make a decision wether you want the lotter that gives instant reward or would you like the lottery with a delayed rewarding.

        To select the immediate lottery press - 'T'

        To select the delayed lottery press - 'L'

        If you have understood the instructions press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = D:/AU/PSY310/Delay discounting/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162}]
    Routine trial
  LoopTerminator trials
